PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '', 'group': 'A', 'session': '001', 'Age': '', 'Gender': '', 'Handiness': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [900, 600]
  expName = GemmaAssocLearnV4
  keyboardBackend = ioHub
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Routines
  Routine reward_trial_feedback
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  Routine practice_feedback
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    CodeComponent practice_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        #Feedback response
        if not practice_resp.rt:
            practice_feedback_msg = 'Too Slow!'
            practice_feedback_colour = 'yellow'
        elif practice_resp.corr:
            practice_feedback_msg = 'Correct!'
            practice_feedback_colour = 'green'
        else:
            practice_feedback_msg = 'Incorrect!'
            practice_feedback_colour = 'red'
    TextComponent practice_feedback_text
      color [set every repeat] = $practice_feedback_colour
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $practice_feedback_msg
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  Routine intro
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    TextComponent intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Welcome!

        In this task you will be presented with some shapes and labels, and asked to remember them.

        You will complete three different versions of this task.

        In one version you will be shown different words relating to yourself and other people. In another version you will be shown different amounts of money, and in another version you will be shown different facial expressions.

        Press space to start.
    KeyboardComponent intro_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reward_instructions
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    CodeComponent reward_code
      Code Type = Auto->JS
      Begin Routine:
        $reward_instr_message = ("Welcome! You will learn to associate the Pentagon with {}, the Diamond with {}, and the Oval with {}.\n\nTry to remember these! \n\nYou will be presented with different combinations of these shapes and words. Your task is to judge whether the presented shape and person match with what we have told you above. \n\nPress '{}' if the shape and money match, and '{}' if they do not match. \n \nPress any key to continue".format(intro_pentagon, intro_diamond, intro_oval, Yes, No))
    TextComponent reward_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $reward_instr_message
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    KeyboardComponent reward_instructions_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_fixation
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    CodeComponent trial_fixation_code
      Code Type = Auto->JS
      Begin Routine:
        if not trials.thisN in [0,60]:
            continueRoutine=False
    PolygonComponent self_trial_fixation_cross
      fillColor = $[255,0,0]
      lineColor = $[255,0,0]
      shape = cross
      size = (0.06, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine self_practice_fixation
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    CodeComponent practice_trial_code
      Code Type = Auto->JS
      Begin Routine:
        #Assigning correct shapes to labels
        if Target == 'Self':
            if Self == 'T':
                self_shape = 'Stimuli\T.bmp'
            elif Self == 'S':
                self_shape = 'Stimuli\S.bmp'
            elif Self == 'C':
                self_shape = 'Stimuli\C.bmp'
        elif Target == 'Friend':
            if Friend == 'S':
                self_shape = 'Stimuli\S.bmp'
            elif Friend == 'C':
                self_shape = 'Stimuli\C.bmp'
            elif Friend == 'T':
                self_shape = 'Stimuli\T.bmp'
        elif Target == 'Stranger':
            if Stranger == 'S':
                self_shape = 'Stimuli\S.bmp'
            elif Stranger == 'C':
                self_shape = 'Stimuli\C.bmp'
            elif Stranger == 'T':
                self_shape = 'Stimuli\T.bmp'

        #Assigning correct responses
        if CorrectAnswer == 'Yes':
            if Yes == 'n':
                corrAns = 'n'
            elif Yes == 'm':
                corrAns = 'm'
        elif CorrectAnswer == 'No':
            if No == 'm':
                corrAns = 'm'
            elif No == 'n':
                corrAns = 'n'

        #Varying ITI Duration to be between 900 ms and 1300 ms (/1000 part is there to convert to seconds)
        ITI_dur = random.randint(900,1300)/1000
    PolygonComponent polygon
      fillColor = $[255,0,0]
      lineColor = $[255,0,0]
      shape = cross
      size = (0.06, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trial_feedback
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    CodeComponent trial_feedback_code
      Code Type = Auto->JS
      Begin Routine:
        #Feedback response
        if not trial_resp.rt:
            trial_feedback_msg = 'Too Slow!'
            trial_feedback_colour = 'yellow'
        elif trial_resp.corr:
            trial_feedback_msg = 'Correct!'
            trial_feedback_colour = 'green'
        else:
            trial_feedback_msg = 'Incorrect!'
            trial_feedback_colour = 'red'
    TextComponent self_trial_feedback_text
      color [set every repeat] = $trial_feedback_colour
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $trial_feedback_msg
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  Routine end
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Well done! You have finished the task!
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  Routine self_practice_trials
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  Routine trials_end
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    TextComponent trials_end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Well done! You have completed these trials.

        Press the spacebar to continue.
    KeyboardComponent trials_end_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine reward_practice_ITI
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    TextComponent reward_ITI_practice_text
      durationEstim = 1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_dur
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  Routine reward_practice_target
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    CodeComponent reward_practice_code
      Code Type = Auto->JS
      Begin Routine:
        #Assigning correct shapes to labels
        if Target == 'HighReward':
            if HighReward == 'P':
                reward_shape = 'Stimuli\P.bmp'
            elif HighReward == 'D':
                reward_shape = 'Stimuli\D.bmp'
            elif HighReward == 'O':
                reward_shape = 'Stimuli\O.bmp'
        elif Target == 'MediumReward':
            if MediumReward == 'P':
                reward_shape = 'Stimuli\P.bmp'
            elif MediumReward == 'D':
                reward_shape = 'Stimuli\D.bmp'
            elif MediumReward == 'O':
                reward_shape = 'Stimuli\O.bmp'
        elif Target == 'LowReward':
            if LowReward == 'P':
                reward_shape = 'Stimuli\P.bmp'
            elif LowReward == 'D':
                reward_shape = 'Stimuli\D.bmp'
            elif LowReward == 'O':
                reward_shape = 'Stimuli\O.bmp'

        #Assigning correct responses
        if CorrectAnswer == 'Yes':
            if Yes == 'n':
                corrAns = 'n'
            elif Yes == 'm':
                corrAns = 'm'
        elif CorrectAnswer == 'No':
            if No == 'm':
                corrAns = 'm'
            elif No == 'n':
                corrAns = 'n'

        #Varying ITI Duration to be between 900 ms and 1300 ms (/1000 part is there to convert to seconds)
        ITI_dur = random.randint(900,1300)/1000
    TextComponent reward_practice_target_label
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text [set every repeat] = $Label
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    TextComponent reward_practice_target_plus
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    ImageComponent reward_practice_target_shape
      image [set every repeat] = $reward_shape
      pos = (0, 0.3)
      size = (0.18, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    KeyboardComponent reward_practice_resp
      allowedKeys [set every repeat] = 'm','n'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.1
      storeCorrect = True
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  Routine trial_break
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    CodeComponent trial_break_code
      Code Type = Auto->JS
      Begin Routine:
        if not trials.thisN in [59,119]:
            continueRoutine=False


        #if self_trials.thisTrialN <60:
        #    self_trial_accuracy = self_trials.data['self_trial_resp.corr', self_trials.thisTrialN [0,59]].mean()
        #elif self_trials.thisTrialN >59 and self_trials.thisN<120:
        #    self_trial_accuracy = self_trials.data['self_trial_resp.corr', self_trials.thisTrialN [60,119]].mean()

        trial_accuracy = int((trials.data['trial_resp.corr'].mean())*100)
    TextComponent trial_break_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $('Your accuracy for this block is {}%.\n\nPlease take an 8 second break.\n\nA red cross at the centre of the screen will indicate the beginning of the next block'.format(trial_accuracy))
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  Routine trial_target
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        #Assigning correct labels (valence isn't included as text because this is an image)
        if Task == 'Valence':
            label_text = ''
        else:
            label_text = Label

        #Using image for valence labels
        if Task == 'Valence':
            label_image = 'Stimuli/' + Label + '.bmp'
        else:
            label_image = 'Stimuli/Empty.bmp'

        #Setting opacity of image to be 0 if task isn't valence
        if Task == 'Valence':
            image_opacity = 1
        else:
            image_opacity = 0

        #Assigning correct shapes
        if Task == 'Self':
            if Target == 'Self':
                shape = 'Stimuli/' + Label1 + '.bmp'
            elif Target == 'Friend':
                shape = 'Stimuli/' + Label2 + '.bmp'
            elif Target == 'Stranger':
                shape = 'Stimuli/' + Label3 + '.bmp'
        elif Task == 'Reward':
            if Target == 'HighReward':
                shape = 'Stimuli/' + Label1 + '.bmp'
            elif Target == 'MediumReward':
                shape = 'Stimuli/' + Label2 + '.bmp'
            elif Target == 'LowReward':
                shape = 'Stimuli/' + Label3 + '.bmp'
        elif Task == 'Valence':
            if Target == 'Happy':
                shape = 'Stimuli/' + Label1 + '.bmp'
            elif Target == 'Neutral':
                shape = 'Stimuli/' + Label2 + '.bmp'
            elif Target == 'Sad':
                shape = 'Stimuli/' + Label3 + '.bmp'

        #Assigning correct responses
        if CorrectAnswer == 'Yes':
            if Yes == 'n':
                corrAns = 'n'
            elif Yes == 'm':
                corrAns = 'm'
        elif CorrectAnswer == 'No':
            if No == 'm':
                corrAns = 'm'
            elif No == 'n':
                corrAns = 'n'

        #Varying ITI Duration to be between 900 ms and 1300 ms (/1000 part is there to convert to seconds)
        ITI_dur = random.randint(900,1300)/1000

        #Varying target duration so that it's longer for valence trials (150 ms rather than 100)
        if Task == 'Valence':
            target_dur = 300/1000
        else:
            target_dur = 250/1000
    TextComponent trial_target_label
      durationEstim = 0.25
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
      text [set every repeat] = $label_text
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    TextComponent trial_target_plus
      durationEstim = 0.25
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
      text = +
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    ImageComponent trial_target_shape
      durationEstim = 0.25
      image [set every repeat] = $shape
      pos = (0, 0.3)
      size = (0.18, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
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    KeyboardComponent trial_resp
      allowedKeys [set every repeat] = 'm','n'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.1
      storeCorrect = True
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    ImageComponent trial_target_label_valence
      durationEstim = 0.25
      image [set every repeat] = $label_image
      opacity [set every repeat] = image_opacity
      pos = (0, -0.3)
      size = (0.2, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
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  Routine practice_fixation
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    PolygonComponent practice_fixation_cross
      fillColor = $[255,0,0]
      lineColor = $[255,0,0]
      shape = cross
      size = (0.06, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine trial_ITI
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    CodeComponent ITI_code
      Code Type = Auto->JS
      End Routine:
        #Adding ITI duration to data file
        trials.addData('ITI_duration', ITI_dur)
    TextComponent self_trial_ITI_text
      durationEstim = 1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_dur
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  Routine reward_trial_break
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  Routine reward_trial_target
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    CodeComponent reward_trial_code
      Code Type = Auto->JS
      Begin Routine:
        #Assigning correct shapes to labels
        if Target == 'HighReward':
            if HighReward == 'P':
                reward_shape = 'Stimuli\P.bmp'
            elif HighReward == 'D':
                reward_shape = 'Stimuli\D.bmp'
            elif HighReward == 'O':
                reward_shape = 'Stimuli\O.bmp'
        elif Target == 'MediumReward':
            if MediumReward == 'P':
                reward_shape = 'Stimuli\P.bmp'
            elif MediumReward == 'D':
                reward_shape = 'Stimuli\D.bmp'
            elif MediumReward == 'O':
                reward_shape = 'Stimuli\O.bmp'
        elif Target == 'LowReward':
            if LowReward == 'P':
                reward_shape = 'Stimuli\P.bmp'
            elif LowReward == 'D':
                reward_shape = 'Stimuli\D.bmp'
            elif LowReward == 'O':
                reward_shape = 'Stimuli\O.bmp'

        #Assigning correct responses
        if CorrectAnswer == 'Yes':
            if Yes == 'n':
                corrAns = 'n'
            elif Yes == 'm':
                corrAns = 'm'
        elif CorrectAnswer == 'No':
            if No == 'm':
                corrAns = 'm'
            elif No == 'n':
                corrAns = 'n'

        #Varying ITI Duration to be between 900 ms and 1300 ms (/1000 part is there to convert to seconds)
        ITI_dur = random.randint(900,1300)/1000
  Routine reward_practice_fixation
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    PolygonComponent reward_practice_fixation_cross
      fillColor = $[255,0,0]
      lineColor = $[255,0,0]
      shape = cross
      size = (0.06, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine self_practice_code_routine
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    CodeComponent self_practice_code_trial
      Code Type = Auto->JS
      Begin Routine:
        #Assigning correct shapes to labels
        if Target == 'Self':
            if Self == 'T':
                self_shape = 'Stimuli\T.bmp'
            elif Self == 'S':
                self_shape = 'Stimuli\S.bmp'
            elif Self == 'C':
                self_shape = 'Stimuli\C.bmp'
        elif Target == 'Friend':
            if Friend == 'S':
                self_shape = 'Stimuli\S.bmp'
            elif Friend == 'C':
                self_shape = 'Stimuli\C.bmp'
            elif Friend == 'T':
                self_shape = 'Stimuli\T.bmp'
        elif Target == 'Stranger':
            if Stranger == 'S':
                self_shape = 'Stimuli\S.bmp'
            elif Stranger == 'C':
                self_shape = 'Stimuli\C.bmp'
            elif Stranger == 'T':
                self_shape = 'Stimuli\T.bmp'

        #Assigning correct responses
        if CorrectAnswer == 'Yes':
            if Yes == 'n':
                corrAns = 'n'
            elif Yes == 'm':
                corrAns = 'm'
        elif CorrectAnswer == 'No':
            if No == 'm':
                corrAns = 'm'
            elif No == 'n':
                corrAns = 'n'

        #Varying ITI Duration to be between 900 ms and 1300 ms (/1000 part is there to convert to seconds)
        ITI_dur = random.randint(900,1300)/1000
  Routine practice_target
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    CodeComponent practice_code
      Code Type = Auto->JS
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      Begin Routine:
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    TextComponent practice_target_label
      durationEstim = 0.25
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
      text [set every repeat] = $label_text
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    TextComponent practice_target_plus
      durationEstim = 0.25
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
      text = +
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    ImageComponent practice_target_shape
      durationEstim = 0.25
      image [set every repeat] = $shape
      pos = (0, 0.3)
      size = (0.18, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
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    KeyboardComponent practice_resp
      allowedKeys [set every repeat] = 'm','n'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.1
      storeCorrect = True
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    ImageComponent practice_target_label_valence
      durationEstim = 0.25
      image [set every repeat] = $label_image
      opacity [set every repeat] = image_opacity
      pos = (0, -0.3)
      size = (0.2, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $target_dur
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  Routine practice_ITI
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    TextComponent ITI_text
      durationEstim = 1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI_dur
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  Routine reward_trial_fixation
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    CodeComponent reward_trial_fixation_code
      Code Type = Auto->JS
      Begin Routine:
        if not reward_trials.thisN in [0,60]:
            continueRoutine=False
    PolygonComponent reward_trial_fixation_cross
      fillColor = $[255,0,0]
      lineColor = $[255,0,0]
      shape = cross
      size = (0.06, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine instructions
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    CodeComponent experiment_code
      Code Type = Auto->JS
      Begin Experiment:
        import random
        import numpy as np
      Begin Routine:
        #Changing the different labels...
        if Task == 'Self':
            Label1_type = 'Self'
            Label2_type = 'Friend'
            Label3_type = 'Stranger'
            Shape1_type = 'Triangle'
            Shape2_type = 'Square'
            Shape3_type = 'Circle'
        elif Task == 'Reward':
            Label1_type = 'HighReward'
            Label2_type = 'MediumReward'
            Label3_type = 'LowReward'
            Shape1_type = 'Pentagon'
            Shape2_type = 'Diamond'
            Shape3_type = 'Oval'
        elif Task == 'Valence':
            Label1_type = 'Happy'
            Label2_type = 'Neutral'
            Label3_type = 'Sad'
            Shape1_type = 'Hexagon'
            Shape2_type = 'Rectangle'
            Shape3_type = 'Star'


        instr_message = ("In this version of the task you will learn to associate the {} with {}, the {} with {}, and the {} with {}.\n\nTry to remember these! \n\nYou will be presented with different combinations of these shapes and {}. Your task is to judge whether the presented shape and {} match with what we have told you above. \n\nPress '{}' if the shape and {} match, and '{}' if they do not match. \n \nPress any key to continue" .format(Shape1_type, intro_label1, Shape2_type, intro_label2, Shape3_type, intro_label3, intro_label_type1, intro_label_type2, Yes, intro_label_type2, No))
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_message
      wrapWidth = 1.3
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    KeyboardComponent instructions_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reward_trial_ITI
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  Routine reward_practice_feedback
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    CodeComponent reward_practice_feedback_code
      Code Type = Auto->JS
      Begin Routine:
        #Feedback response
        if not reward_practice_resp.rt:
            reward_practice_feedback_msg = 'Too Slow!'
            reward_practice_feedback_colour = 'yellow'
        elif reward_practice_resp.corr:
            reward_practice_feedback_msg = 'Correct!'
            reward_practice_feedback_colour = 'green'
        else:
            reward_practice_feedback_msg = 'Incorrect!'
            reward_practice_feedback_colour = 'red'
    TextComponent reward_practice_feedback_text
      color [set every repeat] = $reward_practice_feedback_colour
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $reward_practice_feedback_msg
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  Routine practice_end
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    TextComponent self_practice_end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        End of practice.

        Please press 'SPACEBAR' to start the real experiment.

        PLEASE RESPOND AS QUICKLY AND ACCURATELY AS POSSIBLE.
    KeyboardComponent self_practice_end_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reward_practice_end
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    TextComponent reward_practice_end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        End of practice.

        Please press 'SPACEBAR' to start the real experiment.

        PLEASE RESPOND AS QUICKLY AND ACCURATELY AS POSSIBLE.
    KeyboardComponent reward_practice_end_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine self_trial_end
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    CodeComponent self_trial_end_code
      Code Type = Auto->JS
      Begin Routine:
        if self_trials.thisN >59 and self_trials.thisN<120:
            self_trial_accuracy_secondhalf = self_trials.data['self_trial_resp.corr'].mean()
  Routine evaluate_accuracy
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #Feedback response
        if not practice_resp.rt:
            practice_feedback_msg = 'Too Slow!'
            practice_feedback_colour = 'yellow'
            myaccuracy.append(0)
        elif practice_resp.corr:
            practice_feedback_msg = 'Correct!'
            practice_feedback_colour = 'green'
            myaccuracy.append(1)
        else:
            practice_feedback_msg = 'Incorrect!'
            practice_feedback_colour = 'red'
            myaccuracy.append(0)

        thisExp.addData("myaccuracy", myaccuracy)

        if len(myaccuracy) != 10:
            window_accuracy="Not available until you have done 10 trials"

        if len(myaccuracy) == 10:
            window_accuracy = sum(myaccuracy) / len(myaccuracy)
            thisExp.addData("window_accuracy", window_accuracy)
            number_of_attempts = number_of_attempts + 1
            if window_accuracy >= 0.8:
                moving_window_loop.finished = True
            if number_of_attempts == max_number_of_attempts:
                moving_window_loop.finished = True
        msg_n_attempts = "You have used "+str(number_of_attempts)+" attempts"
        thisExp.addData("number_of_attempts", number_of_attempts)
        msg_window_accuracy = "Accuracy per trial in the current window is\n"+str(window_accuracy)
  Routine init_list_of_accuracies
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        number_of_attempts = 0
        max_number_of_attempts = 6
        myaccuracy = []
        window_accuracy = 0
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Starting the moving window
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  Routine print_accuracy
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_n_attempts
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $myaccuracy
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_window_accuracy
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space','m','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine condit
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if window_accuracy < 0.8:
            msg= "Sorry, you used too many attempts to get the required accurac, the experiment is now over, press escape"
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $msg
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  Routine reset_acc_if
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if len(myaccuracy) == 10:
            myaccuracy=[]
            window_accuracy = 0
  Routine bakloop
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if number_of_attempts>=6:
            msg="You exceeded the number of attempts, please close the experiment by pressing escape"
        elif len(myaccuracy)==10 and window_accuracy <0.8:
            msg="Try harder, you scored less than 80%"
        elif len(myaccuracy)==10 and window_accuracy >=0.8:
            msg="Well done, now for the main trials"
            moving_window_loop.finished = True
        else:
            msg= " "
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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Flow
  LoopInitiator key_commands loopType="TrialHandler"
    Selected rows = np.random.choice(2, size=1, replace=False)
    conditionsFile = KeyboardCommand.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Yes', 'n'), ('No', 'm')]),
      OrderedDict([('Yes', 'm'), ('No', 'n')])]
    Routine intro
    LoopInitiator task_order loopType="TrialHandler"
      conditionsFile = $'Group' + expInfo['group'] + '.xlsx'
      loopType = sequential
      nReps = 1
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      LoopInitiator task_block loopType="TrialHandler"
        Selected rows = np.random.choice(6, size=1, replace=False)
        conditionsFile = $Task + 'Task.xlsx'
        loopType = random
        nReps = 1
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        Routine instructions
        Routine practice_fixation
        LoopInitiator practice_trial loopType="TrialHandler"
          conditionsFile = $Task + 'TrialStim.xlsx'
          loopType = random
          nReps = 1
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          Routine practice_target
          Routine practice_ITI
          Routine practice_feedback
        LoopTerminator practice_trial
        Routine init_list_of_accuracies
        LoopInitiator moving_window_loop loopType="TrialHandler"
          conditionsFile = $Task + 'TrialStim.xlsx'
          loopType = random
          nReps = 10
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          Routine practice_target
          Routine practice_ITI
          Routine practice_feedback
          Routine evaluate_accuracy
          Routine print_accuracy
          Routine bakloop
          Routine reset_acc_if
        LoopTerminator moving_window_loop
        Routine practice_end
        LoopInitiator trials loopType="TrialHandler"
          conditionsFile = $Task + 'TrialStim.xlsx'
          loopType = random
          nReps = 10
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          Routine trial_fixation
          Routine trial_target
          Routine trial_ITI
          Routine trial_feedback
          Routine trial_break
        LoopTerminator trials
        Routine trials_end
      LoopTerminator task_block
    LoopTerminator task_order
    Routine end
  LoopTerminator key_commands
